PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = short term memory
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent textinstructions
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A series of words will appear, each word lasting for a short viewing time. Try to remember each word that is presented to you.
        Press space bar to continue.
    KeyboardComponent keyInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StudyTrials
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    TextComponent textStudyTrials
      color [set every repeat] = $WordColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $WordItem
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  Routine WelcomeScreen
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    TextComponent welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        welcome to the short term memory experiment.

        press the spacebar key to continue.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BlankScreen
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    TextComponent textBlank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine WaitScreen
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    TextComponent textWaitScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please notify the researcher.
        Press '1' to continue
    KeyboardComponent keyWaitScreen
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BlankScreen_2
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    TextComponent Blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Y_N_Screen
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    TextComponent textY_N_Screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The following words are testing your recall.
        Press either 'Y' for Yes, 'N' for No.
    KeyboardComponent keyY_N
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TextTrials
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    TextComponent textTestTrials
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Thank you for your participation in this study.
        Please see the researcher.
Flow
  Routine WelcomeScreen
  Routine BlankScreen
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = /Users/shrutigupta/Downloads/Word_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'anxiety', 'WordColor': 'blue'},
      {'WordItem': 'sad', 'WordColor': 'blue'},
      {'WordItem': 'excitement', 'WordColor': 'blue'},
      {'WordItem': 'psychology', 'WordColor': 'red'},
      {'WordItem': 'croissant', 'WordColor': 'red'},
      {'WordItem': 'bottle', 'WordColor': 'red'},
      {'WordItem': 'couch', 'WordColor': None},
      {'WordItem': 'keyboard', 'WordColor': None},
      {'WordItem': 'television', 'WordColor': None},
      {'WordItem': 'fascinated', 'WordColor': None},
      {'WordItem': 'depression', 'WordColor': None}]
    Routine StudyTrials
    Routine BlankScreen
  LoopTerminator trials
  Routine WaitScreen
  Routine BlankScreen_2
  Routine Y_N_Screen
  Routine BlankScreen
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/shrutigupta/Downloads/Word_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'anxiety', 'WordColor': 'blue'},
      {'WordItem': 'sad', 'WordColor': 'blue'},
      {'WordItem': 'excitement', 'WordColor': 'blue'},
      {'WordItem': 'psychology', 'WordColor': 'red'},
      {'WordItem': 'croissant', 'WordColor': 'red'},
      {'WordItem': 'bottle', 'WordColor': 'red'},
      {'WordItem': 'couch', 'WordColor': None},
      {'WordItem': 'keyboard', 'WordColor': None},
      {'WordItem': 'television', 'WordColor': None},
      {'WordItem': 'fascinated', 'WordColor': None},
      {'WordItem': 'depression', 'WordColor': None}]
    Routine TextTrials
    Routine BlankScreen
  LoopTerminator trials_2
  Routine EndScreen
