PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName =  visual search
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent target
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = T
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    TextComponent distr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = L
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Flow
  Routine trial
