PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = word priming
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      flip [set every repeat] = None
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_text
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/shrutigupta/Downloads/study_text.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_text': 'book'},
      {'study_text': 'cushion'},
      {'study_text': 'phone'},
      {'study_text': 'marble'},
      {'study_text': 'board'},
      {'study_text': 'laptop'},
      {'study_text': 'chart'},
      {'study_text': 't-shirt'},
      {'study_text': 'mouse'},
      {'study_text': 'pastry'},
      {'study_text': 'case'},
      {'study_text': 'cruise'},
      {'study_text': 'police'},
      {'study_text': 'keys'},
      {'study_text': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/shrutigupta/Downloads/test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p'},
      {'test_word': '_ha_t'},
      {'test_word': 't_hi_t'},
      {'test_word': '_ou_se'},
      {'test_word': 'p_as_tr_'},
      {'test_word': 'c_s_'},
      {'test_word': '_ru_is_'},
      {'test_word': 'p_li_e'},
      {'test_word': 'k_y_'},
      {'test_word': 'p_st_r'},
      {'test_word': '_o_rd'},
      {'test_word': '_a_bl_'},
      {'test_word': '_ho_e'},
      {'test_word': '_oo_'},
      {'test_word': 'c_s_io_'},
      {'test_word': 'ta_l_'},
      {'test_word': 'p_nc_l'},
      {'test_word': 'v_s_'},
      {'test_word': 'bo_t_e'},
      {'test_word': 'c_m_ra'}]
    Routine test
  LoopTerminator trials_2
